PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = saskia_decoding_main
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent text
      color = $[0,0,0]
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Please name the pictures
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # setup
        from psychopy import sound
        import pandas as pd
        import random

        ## GENERATE PRESENTATION ORDER
        # based on session number, choose order. These are generated by optseq - living = 0; nonliving = 1
        # main runs
        if expInfo["run"] == "1":
            optseqOrder = "StimLists\optseqOrder1.xlsx"
        elif expInfo["run"] == "2":
            optseqOrder = "StimLists\optseqOrder2.xlsx"
        elif expInfo["run"] == "3":
            optseqOrder = "StimLists\optseqOrder3.xlsx"
        elif expInfo["run"] == "4":
            optseqOrder = "StimLists\optseqOrder4.xlsx"
        # spare run of normal length - can use for training
        elif expInfo["run"] == "5":
            optseqOrder = "StimLists\optseqOrderSpare.xlsx"

        # load the order in
        df = pd.read_excel(optseqOrder)

        # convert the order to boolean
        animacyidx = df['ConditionOrder'].astype(bool).tolist()

        # scramble living and nonliving
        living = random.sample(range(50), 50)
        nonliving = random.sample(range(50, 100), 50)

        # initialise sequence and counters
        sequence = [0] * 100
        lividx = 0
        nonlividx = 0

        # fill in the order
        for i in range(len(animacyidx)):
            if animacyidx[i]:
                sequence[i] = nonliving[nonlividx]
                nonlividx += 1
            else:
                sequence[i] = living[lividx]
                lividx += 1
  Routine triggerstart
    TextComponent text_2
      color = $[0,0,0]
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Get ready...
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    KeyboardComponent key_resp_2
      allowedKeys = '7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MR_rest
    TextComponent text_3
      color = $[0,0,0]
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.00
      text = +
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  Routine picture
    ImageComponent image
      image [set every repeat] = $stimulus
      interpolate = nearest
      pos = (0, 0.15)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    MicrophoneComponent mic_2
      channel = 0
      channels = auto
      device = Headset Microphone (Microsoft LifeChat LX-3000)
      maxSize = 24000
      outputType = wav
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stereo = False
      stopVal [duration (s)] = 4.00
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine stimulistart
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        seqidx += 1
  Routine fix
    TextComponent text_4
      color = $[0,0,0]
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = +
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  Routine congratulations
    TextComponent text_5
      color = $[0,0,0]
      letterHeight = 0.1
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.00
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      text:
        PLEASE REMAIN STILL
        This run of the task is over. Well done!
Flow
  Routine instructions
  Routine setup
  Routine triggerstart
  Routine MR_rest
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $sequence
    conditionsFile = StimLists\Stim.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stimulus': 'StimFiles/bat.bmp'},
      {'stimulus': 'StimFiles/cockerel.bmp'},
      {'stimulus': 'StimFiles/crab.bmp'},
      {'stimulus': 'StimFiles/dragon.bmp'},
      {'stimulus': 'StimFiles/ladybird.bmp'},
      {'stimulus': 'StimFiles/tortoise.bmp'},
      {'stimulus': 'StimFiles/whale.bmp'},
      {'stimulus': 'StimFiles/ant.bmp'},
      {'stimulus': 'StimFiles/butterfly.bmp'},
      {'stimulus': 'StimFiles/bear.bmp'},
      {'stimulus': 'StimFiles/bee.bmp'},
      {'stimulus': 'StimFiles/camel.bmp'},
      {'stimulus': 'StimFiles/cat.bmp'},
      {'stimulus': 'StimFiles/caterpillar.bmp'},
      {'stimulus': 'StimFiles/cow.bmp'},
      {'stimulus': 'StimFiles/deer.bmp'},
      {'stimulus': 'StimFiles/dog.bmp'},
      {'stimulus': 'StimFiles/duck.bmp'},
      {'stimulus': 'StimFiles/eagle.bmp'},
      {'stimulus': 'StimFiles/elephant.bmp'},
      {'stimulus': 'StimFiles/fish.bmp'},
      {'stimulus': 'StimFiles/fly.bmp'},
      {'stimulus': 'StimFiles/fox.bmp'},
      {'stimulus': 'StimFiles/frog.bmp'},
      {'stimulus': 'StimFiles/giraffe.bmp'},
      {'stimulus': 'StimFiles/gorilla.bmp'},
      {'stimulus': 'StimFiles/goat.bmp'},
      {'stimulus': 'StimFiles/horse.bmp'},
      {'stimulus': 'StimFiles/kangaroo.bmp'},
      {'stimulus': 'StimFiles/lion.bmp'},
      {'stimulus': 'StimFiles/lobster.bmp'},
      {'stimulus': 'StimFiles/monkey.bmp'},
      {'stimulus': 'StimFiles/mouse.bmp'},
      {'stimulus': 'StimFiles/ostrich.bmp'},
      {'stimulus': 'StimFiles/owl.bmp'},
      {'stimulus': 'StimFiles/peacock.bmp'},
      {'stimulus': 'StimFiles/penguin.bmp'},
      {'stimulus': 'StimFiles/pig.bmp'},
      {'stimulus': 'StimFiles/rabbit.bmp'},
      {'stimulus': 'StimFiles/racoon.bmp'},
      {'stimulus': 'StimFiles/rhinoceros.bmp'},
      {'stimulus': 'StimFiles/seahorse.bmp'}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
    Routine picture
    Routine fix
  LoopTerminator trials
  Routine MR_rest
  Routine congratulations
